PsychoPy2experiment version="3.0.0b11"
Settings
  Completed URL = completedURL
  Experiment info = {'participant': '', 'group': 'object'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2048, 1152]
  expName = untitled
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Routines
  Routine trial
    ImageComponent pic
      image [set every repeat] = $image
      size = (0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SoundComponent sound_1
      sound [set every repeat] = $sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp_trial
      allowedKeys [set every repeat] = 'space', 'None'
      correctAns = $corResp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = .5
      text = +
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $"subFiles/" + expInfo['group'] + "TrialList.csv"
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trials
