PsychoPy2experiment version="1.82.00"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'01', u'participant': u''}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2048, 1152]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = stroop
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      color [set every repeat] = $colour
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corResp
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = "r","g","b"
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      text = press "r" for red, "b" for blue and "g" for green
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      text = This is the end of the experiment
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = $str(int(expInfo['participant'])%2+1) + "PickBlocks.csv"
    loopType = sequential
    nReps = 1
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    Routine instruct
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $blockList
      isTrials = False
      loopType = random
      nReps = 1
      endPoints = [1, 2]
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      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
  Routine thanks
